<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Arduino</ard:Name>
          <ard:PortName>COM5</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>10</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonSource">
        <ipy:Script>import time

@returns(int)
def generate():
  time.sleep(.038)
  yield 0</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>7</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>import time

@returns(bool)
def process(value):
  time.sleep(.038)
  return False
</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Arduino</ard:PortName>
          <ard:Pin>7</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>100</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ipy:PythonSource">
          <ipy:Script>import time

@returns(int)
def generate():
  time.sleep(.046)
  yield 0</ipy:Script>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>true</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:DigitalOutput">
            <ard:PortName>COM3</ard:PortName>
            <ard:Pin>8</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ipy:PythonTransform">
          <ipy:Script>import time

@returns(bool)
def process(value):
  time.sleep(.046)
  return False
</ipy:Script>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="BooleanProperty">
            <Value>false</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:DigitalOutput">
            <ard:PortName>Arduino</ard:PortName>
            <ard:Pin>8</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Delay">
            <rx:DueTime>PT0.5S</rx:DueTime>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:RepeatCount">
            <rx:Count>100</rx:Count>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>